#### GENERAL ####
i:Ts/Seed =  1  #starting random seed 
i:Ts/NumberOfThreads = -1
b:Ts/DumpParameters = "True" 
Ts/PauseBeforeQuit = "False"

#### GUI ####
s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1200
i:Gr/ViewA/WindowSizeY = 1000
u:Gr/ViewA/Zoom = 2.
Ts/UseQt = "True"


#### WORLD ####
s:Ge/World/Type = "TsBox"
d:Ge/World/HLX = 10. um
d:Ge/World/HLY = 10. um
d:Ge/World/HLZ = 10. um
s:Ge/World/Material = "Vacuum"
s:Ge/World/Color= "white"


#### GEOMETRY ####
s:Ge/Capillary/Parent = "World"
s:Ge/Capillary/Type="TsBioSAXSdosimetry"
s:Ge/Capillary/Material= "Vacuum"
s:Ge/Capillary/CapillaryWall/Material= "G4_SILICON_DIOXIDE"
s:Ge/Capillary/CapillaryWall/Color= "yellow"
s:Ge/Capillary/CapillaryLiquid/Material="G4_WATER"
s:Ge/Capillary/CapillaryLiquid/Color= "blue"
s:Ge/Capillary/TargetSphere/Material="G4_WATER"
s:Ge/Capillary/TargetSphere/Color= "green"
d:Ge/Capillary/OuterRadius= 5.0 um
d:Ge/Capillary/InnerRadius= 4.0 um
d:Ge/Capillary/Length= 8.0 um
d:Ge/Capillary/TargetRadius= 0.1 um
i:Ge/Capillary/Targets= 100
# enables a parallel world which makes it possible to place the target spheres with an overlap
# b:Ge/Capillary/Sphere/IsParallel = "True"  



